name = getTitle();
path=getInfo("image.directory")

run("Split Channels");
C1 = "C1-"+name;
C2 = "C2-"+name;
C3 = "C3-"+name;
close(C3);

selectWindow(C1);
run("Threshold...");  // to open the threshold window if not opened yet 
waitForUser("threshold to select the background"); 
resetThreshold();
close("Threshold");
roiManager("Add");
n = roiManager("count");//subtracts the mean gray level calculated from user-defined selections that 
  //have been added to the ROI Manager. It works with both single images and a stacks.
      if (n==0)
          exit("This macro requires at least one ROI Manager entry");
      sum = 0;
      for (i=0; i<n; i++) {
          roiManager("select", i);
          getStatistics(area, mean);
          sum += mean;
      }
      average = sum/n;
      run("Select None");
      run("Subtract...", "stack value="+average);

selectWindow(C2);
n = roiManager("count");
      if (n==0)
          exit("This macro requires at least one ROI Manager entry");
      sum = 0;
      for (i=0; i<n; i++) {
          roiManager("select", i);
          getStatistics(area, mean);
          sum += mean;
      }
      average = sum/n;
      run("Select None");
      run("Subtract...", "stack value="+average);
close("ROI manager");

selectWindow(C2);
run("Gaussian Blur...", "sigma=1 stack");
run("32-bit");
selectWindow(C1);
run("Gaussian Blur...", "sigma=1 stack");
run("32-bit");

run("Threshold...");  // to open the threshold window if not opened yet 
waitForUser("threshold to remove pixel values from the background"); 
run("NaN Background", "stack");
resetThreshold();
close("Threshold");

imageCalculator("Divide create stack", C2,C1);
close(C2);
close(C1);
selectWindow("Result of "+C2);
run("16 colors");
name2=path+"Result of "+name;
run("Save", "save=[name2]");
run("Make Montage...", "columns=6 rows=5 scale=.5");
run("Calibration Bar...", "location=[Lower Left] fill=White label=Black number=2 decimal=0 font=12 zoom=2 overlay");
selectWindow("Result of "+name);
run("Select All");
roiManager("Add");
waitForUser("add ROIs, or hit OK to just measure the whole image"); 
roiManager("Multi Measure");
saveAs("Results", path+"Results.csv");
run("Close");
close("ROI manager");
